<?xml version="1.0" encoding="UTF-8"?>
<experiment 
    xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
    xsi:noNamespaceSchemaLocation="https://labbench.io/xsd/5.1/experiment.xsd">

  <subject-validator 
    regex="^S[0-9]{3}$"
    advice="Please enter an ID in the form of SXXX, where X is a digit" />

    <experimental-setup>
        <devices>
            <lio 
                id="lio" 
                default-analog-output="0">
                <stimulators>
                    <ds5
                        name="DS5"
                        transconductance="5mA_1V" />
                </stimulators>
                <response-devices>
                    <visual-analog-scale id="vas"
                        length="10" 
                        sample-period="100" 
                        timing-source="none">
                        <anchors>
                            <top-anchor text="Maximal Pain"/>
                            <bottom-anchor text="No Pain" />                            
                        </anchors>
                    </visual-analog-scale>
                </response-devices>
            </lio>

            <display 
                id="display"
                active-color="rgb(255, 255, 255)"
                background-color="rgb(255, 255, 255)"
                inactive-color="rgb(0, 0, 0)"
                normative-distance="40"
                position="upper-right"
                screen="primary"> 
                
                <monitor 
                    diagonal-size="13"
                    distance="40"/>

                <configurations>
                    <image-display 
                        id="image"
                        experimental-setup-id="display"
                        background-color="rgb(255, 255, 255)"/>
                </configurations>
            </display>
        </devices>
        <device-mapping>
            <device-assignment device-id="lio"
                               instrument-name="Stimulator"/>
            <device-assignment device-id="lio.vas"
                               instrument-name="Response"/>
            <device-assignment device-id="lio.vas"
                               instrument-name="RatioScale"/>
            <device-assignment device-id="lio.vas"
                               instrument-name="Response"/>
            <device-assignment device-id="display.image"
                               instrument-name="Display"/>
        </device-mapping>
    </experimental-setup>   
    <protocol>
        <languages>
            <language 
                name="German" 
                code="de"/>
            <language 
                name="English" 
                code="en"/>
        </languages>
        <defines>
            <define 
                name="NumberOfLearningBlocks"
                value="4"/> <!-- correct value: 4-->
            <define 
                name="LearningTaskBlockSize" 
                value="20"/> <!-- correct value: 20 -->
            <define 
                name="NumberOfTestBlocks"
                value="5"/> <!--  correct value: 5 -->
            <define 
                name="TestTaskBlockSize" 
                value="12"/> <!--correct value: 12 -->
            <define 
                name="Images" 
                value="func: Script.CreateImageRepository(tc)"/>
            <define 
                name="Tperiod"
                value="1000.0/200.0"/>
            <define 
                name="Ts"
                value="1"/>
        </defines>
        <tests>
            <psychophysics-stimulus-presentation 
                id="PRESENTATION"
                name="Presentation of stimuli"
                experimental-setup-id="display"
                stimulus-update-rate="20000">

                <intensity type="geomspace"
                           x0="Stimulator.Imax/100"
                           x1="Stimulator.Imax"
                           n="50"/>
    
                <responses response-collection="ratio-rating"/>
                
                <stimulation>
                    <stimulus>
                        <repeated
                            N="4"
                            Tperiod="Tperiod">
                            <pulse 
                                Is="x"
                                Ts="Ts"/>
                        </repeated>
                    </stimulus>
                </stimulation>        
            </psychophysics-stimulus-presentation>
    
            <psychophysics-threshold-estimation 
                id="THR30"
                name="Threshold (VAS 3)"
                experimental-setup-id="display"
                stimulus-update-rate="20000">

                <dependencies>
                    <dependency id="PRESENTATION"/>
                </dependencies>
    
                <update-rate-random 
                    min="4000" 
                    max="6000"/>
    
                <ratio-rating-task target="3"/>
        
                <channels>
                    <channel 
                        id="PULSE"
                        name="Pulse (1s)"
                        Imax="100"
                        Imin="0"
                        channel-type="single-sample">

                        <up-down-method 
                            reversal-rule="1"
                            step-size="0.1"
                            initial-direction="increasing"
                            start-intensity="PRESENTATION.Intensity"
                            step-size-type="relative"
                            max-step-size-reduction="0.1"
                            step-size-reduction="0.5"
                            skip-rule="0"
                            stop-rule="2" />
    
                        <stimulus>
                            <repeated
                                N="4"
                                Tperiod="Tperiod">
                                <pulse 
                                    Is="x" 
                                    Ts="Ts" />
                            </repeated>
                        </stimulus>
                    </channel>
                </channels>
            </psychophysics-threshold-estimation>
    
            <psychophysics-threshold-estimation 
                id="THR70"
                name="Threshold (VAS 7)"
                experimental-setup-id="display"
                stimulus-update-rate="20000">

                <dependencies>
                    <dependency id="PRESENTATION"/>
                </dependencies>
    
                <update-rate-random 
                    min="4000" 
                    max="6000"/>
    
                <ratio-rating-task target="7"/>
       
                <channels>
                    <channel 
                        id="PULSE"
                        name="Pulse (1s)"
                        Imax="100"
                        Imin="0"
                        channel-type="single-sample">

                        <up-down-method 
                            reversal-rule="1"
                            step-size="0.1"
                            initial-direction="increasing"
                            start-intensity="PRESENTATION.Intensity"
                            step-size-type="relative"
                            max-step-size-reduction="0.1"
                            step-size-reduction="0.5"
                            skip-rule="0"
                            stop-rule="2" />
    
                        <stimulus>
                            <repeated
                                N="4"
                                Tperiod="Tperiod">
                                <pulse 
                                    Is="x" 
                                    Ts="Ts" />
                            </repeated>
                        </stimulus>
                    </channel>
                </channels>
            </psychophysics-threshold-estimation>
    
            <stimulation-sequence
                id="LP"
                name="Learning Phase"
                experimental-setup-id="display"
                response-collection="none"
                stimulus-update-rate="20000">

                <test-events complete="func: Script.LearningComplete(tc)" />

                <dependencies>
                    <dependency id="THR30"/>
                    <dependency id="THR70"/>
                </dependencies>
    
                <stimulation-scripts 
                    stimulate="func: Script.RunLearning(tc,x)"
                    initialize="func: Script.InitializeLearning(tc)"                                     
                    stimulus-description="Pressure"
                    stimulus-unit="kPa">

                    <instrument 
                        interface="image-display"
                        name="Display"/>
                    <instrument 
                        interface="ratio-scale" 
                        name="Response"/> 
                </stimulation-scripts>
    
                <stimulation-pattern time-base="seconds">
                    <sequence
                        iterations="NumberOfLearningBlocks">
                        <sequence 
                            iterations="LearningTaskBlockSize*NumberOfStimuli" 
                            Tperiod="11" />

                        <sequence 
                            pause="true" 
                            Tperiod="1" />

                    </sequence>
                </stimulation-pattern>
    
                <stimuli order="block-random">
                    <stimulus name="L0" />
                    <stimulus name="L1" />
                    <stimulus name="H0" />
                    <stimulus name="H1" />
                </stimuli>            
            </stimulation-sequence>
        
            <stimulation-sequence
                id="TP"
                name="Test Phase"
                experimental-setup-id="display"
                response-collection="none"
                stimulus-update-rate="20000">

                <test-events complete="func: Script.TestComplete(tc)" />

                <dependencies>
                    <dependency id="THR30"/>
                    <dependency id="THR70"/>
                    <dependency id="LP"/>
                </dependencies>
    
                <stimulation-scripts 
                    stimulate="func: Script.RunTest(tc,x)"
                    initialize="func: Script.InitializeTest(tc)"
                    stimulus-description="Pressure"
                    stimulus-unit="kPa">

                    <instrument 
                        interface="image-display"
                        name="Display"/>
                    <instrument 
                        name="Stimulator"
                        interface="stimulator"/>
                    <instrument 
                        interface="ratio-scale" 
                        name="Response"/>
                </stimulation-scripts>
    
                <stimulation-pattern time-base="seconds">
                    <sequence
                        iterations="NumberOfTestBlocks">

                        <sequence 
                            iterations="TestTaskBlockSize*NumberOfStimuli" 
                            Tperiod="17" />

                        <sequence
                            pause="true"
                            Tperiod="1"/>
                    </sequence>
                </stimulation-pattern>
                
                <stimuli order="block-random">
                    <stimulus 
                        name="L0C"                        
                        intensity="THR30['PULSE']">
                        <stimulus>
                            <repeated
                                N="4"
                                Tperiod="Tperiod">
                                <pulse 
                                    Is="x"
                                    Ts="Ts"/>
                            </repeated>
                        </stimulus>
                    </stimulus>
                    <stimulus 
                        name="L0I" 
                        intensity="THR70['PULSE']">
                        <stimulus>
                            <repeated
                                N="4"
                                Tperiod="Tperiod">
                                <pulse 
                                    Is="x"
                                    Ts="Ts"/>
                            </repeated>
                        </stimulus>
                    </stimulus>
                    <stimulus 
                        name="L1C" 
                        intensity="THR30['PULSE']">
                        <stimulus>
                            <repeated
                                N="4"
                                Tperiod="Tperiod">
                                <pulse 
                                    Is="x"
                                    Ts="Ts"/>
                            </repeated>
                        </stimulus>
                    </stimulus>
                    <stimulus 
                        name="L1I" 
                        intensity="THR70['PULSE']">
                        <stimulus>
                            <repeated
                                N="4"
                                Tperiod="Tperiod">
                                <pulse 
                                    Is="x"
                                    Ts="Ts"/>
                            </repeated>
                        </stimulus>
                    </stimulus>
                    <stimulus
                        name="H0C" 
                        intensity="THR70['PULSE']">
                        <stimulus>
                            <repeated
                                N="4"
                                Tperiod="Tperiod">
                                <pulse 
                                    Is="x"
                                    Ts="Ts"/>
                            </repeated>
                        </stimulus>
                    </stimulus>
                    <stimulus 
                        name="H0I" 
                        intensity="THR30['PULSE']">
                        <stimulus>
                            <repeated
                                N="4"
                                Tperiod="Tperiod">
                                <pulse 
                                    Is="x"
                                    Ts="Ts"/>
                            </repeated>
                        </stimulus>
                    </stimulus>
                    <stimulus 
                        name="H1C" 
                        intensity="THR70['PULSE']">
                        <stimulus>
                            <repeated
                                N="4"
                                Tperiod="Tperiod">
                                <pulse 
                                    Is="x"
                                    Ts="Ts"/>
                            </repeated>
                        </stimulus>
                    </stimulus>
                    <stimulus 
                        name="H1I" 
                        intensity="THR30['PULSE']">
                        <stimulus>
                            <repeated
                                N="4"
                                Tperiod="Tperiod">
                                <pulse 
                                    Is="x"
                                    Ts="Ts"/>
                            </repeated>
                        </stimulus>
                    </stimulus>
                </stimuli>
            </stimulation-sequence>        
        </tests>
        <assets>
            <file-asset 
                id="Script" 
                file="Script.py"  />
            <file-asset 
                id="VisualStimuli" 
                file="VisualStimuli.zip" />
        </assets>        
    </protocol> 
</experiment>
