<?xml version="1.0" encoding="UTF-8"?>
<protocol xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
          xsi:schemaLocation="http://labbench.io https://labbench.io/xsd/dev/protocol.xsd"
          name="Sensory Processing in Autism (Audio Only)"
          id="spAutismAudio">
    <description />
    <defines>
        <!-- Stimulus parameters -->
        <define name="VibraIs"
                value="0.5" />
        <define name="VibraTs"
                value="50"/>
        <define name="VibraTisi"
                value="500"/>
        <define name="VibraFs"
                value="100"/>

        <!-- Sound Stimulus parameters -->
        <define name="SndIs"
                value="45" />
        <define name="SndTs"
                value="250"/>
        <define name="SndTisi"
                value="1000"/>
        <define name="SndFs"
                value="1000"/>


        <!-- Psi Method -->
        <define name="Trials"
                value="50"/>
        <define name="Imult"
                value="4"/>
        <define name="alphaX0"
                value="0.05"/>
        <define name="alphaN"
                value="200"/>
        <define name="intensityN"
                value="100"/>
        <define name="random"
                value="func: Functions.CreateRandom"/>
    </defines>
    <tests>
        <psychophysics-stimulus-presentation ID="TA0"
                                             name="Loudness Discrimination Acuity (Stimulus Presentation)"
                                             stimulus-update-rate="44100"
                                             response-collection="yes-no">
            <intensity type="geomspace"
                       x0="1"
                       x1="40"
                       n="20" />
            <combined>
                <sine Is="func: Functions.GetFirstIntensity"
                      Ts="SndTs"
                      Frequency="SndFs"
                      Tdelay="0" />

                <sine Is="func: Functions.GetSecondIntensity"
                      Ts="SndTs"
                      Frequency="SndFs"
                      Tdelay="SndTs + SndTisi" />
            </combined>
        </psychophysics-stimulus-presentation>
        
        <psychophysics-threshold-estimation ID="TA1"
                                            name="Loudness Discrimination Acuity (Dynamic Range)">
            <dependencies />
            <update-rate-deterministic value="5000" />
            <yes-no-task stimulus-update-rate="44100" />

            <channels>
                <channel ID="C01"
                         channel-type="single-sample"
                         trigger="1"
                         channel="3"
                         name="Sine (1000Hz)"
                         Imax="40">
                    <up-down-method down-rule="1"
                                    up-rule="1"
                                    skip-rule="0"
                                    start-intensity="2.0/40"
                                    step-size-up="0.25"
                                    step-size-down="0.25"
                                    step-size-type="relative"
                                    terminate-on-limit-reached="true"
                                    max-step-size-reduction="0.1"
                                    step-size-reduction="0.5"
                                    stop-criterion="reversals"
                                    stop-rule="6" />

                    <combined>
                        <sine Is="func: Functions.GetFirstIntensity"
                              Ts="SndTs"
                              Frequency="SndFs"
                              Tdelay="0" />

                        <sine Is="func: Functions.GetSecondIntensity"
                              Ts="SndTs"
                              Frequency="SndFs"
                              Tdelay="SndTs + SndTisi" />
                    </combined>
                </channel>
            </channels>
        </psychophysics-threshold-estimation>

        <psychophysics-threshold-estimation ID="TA2"
                                            name="Loudness Discrimination Acuity (Trial Run)">
            <dependencies>
                <dependency ID="TA1"/>
            </dependencies>
            <update-rate-deterministic value="5000" />
            <yes-no-task stimulus-update-rate="44100" />

            <channels>
                <channel ID="C01"
                         channel-type="single-sample"
                         trigger="1"
                         channel="3"
                         name="Sine (1000Hz)"
                         Imax="Imult * TA1['C01'] if Imult * TA1['C01'] &lt; 40.0 else 40.0">
                    <psi-method number-of-trials="5">
                        <quick alpha="0.5"
                               beta="1"
                               lambda="0.02"
                               gamma="0.0" />
                        <beta type="linspace"
                              base="10"
                              x0="-1.2041"
                              x1="1.2041"
                              n="20"/>
                        <alpha type="linspace"
                               x0="alphaX0"
                               x1="1"
                               n="alphaN" />
                        <intensity type="linspace"
                                   x0="alphaX0"
                                   x1="1"
                                   n="intensityN" />
                    </psi-method>

                    <combined>
                        <sine Is="func: Functions.GetFirstIntensity"
                              Ts="SndTs"
                              Frequency="SndFs"
                              Tdelay="0" />

                        <sine Is="func: Functions.GetSecondIntensity"
                              Ts="SndTs"
                              Frequency="SndFs"
                              Tdelay="SndTs + SndTisi" />
                    </combined>
                </channel>
            </channels>
        </psychophysics-threshold-estimation>

        <psychophysics-threshold-estimation ID="TA3"
                                            name="Loudness Discrimination Acuity">
            <properties>
                <auto-start value="true"/>
            </properties>
            <dependencies>
                <dependency ID="TA2"/>
            </dependencies>
            <update-rate-deterministic value="5000" />
            <yes-no-task stimulus-update-rate="44100" />

            <channels>
                <channel ID="C01"
                         channel-type="single-sample"
                         trigger="1"
                         channel="3"
                         name="Sine (1000Hz)"
                         Imax="Imult * TA1['C01'] if Imult * TA1['C01'] &lt; 40.0 else 40.0">
                    <catch-trials order="block-randomized"
                                  interval="5" />
                    <psi-method number-of-trials="Trials">
                        <quick alpha="0.5"
                               beta="1"
                               lambda="0.02"
                               gamma="0.0" />
                        <beta type="linspace"
                              base="10"
                              x0="-1.2041"
                              x1="1.2041"
                              n="20"/>
                        <alpha type="linspace"
                               x0="alphaX0"
                               x1="1"
                               n="alphaN" />
                        <intensity type="linspace"
                                   x0="alphaX0"
                                   x1="1"
                                   n="intensityN" />
                    </psi-method>

                    <combined>
                        <sine Is="func: Functions.GetFirstIntensity"
                              Ts="SndTs"
                              Frequency="SndFs"
                              Tdelay="0" />

                        <sine Is="func: Functions.GetSecondIntensity"
                              Ts="SndTs"
                              Frequency="SndFs"
                              Tdelay="SndTs + SndTisi" />
                    </combined>
                </channel>
            </channels>
        </psychophysics-threshold-estimation>
    </tests>
    <assets>
        <file-asset id="Functions"
                    file="Functions.py" />
    </assets>
</protocol>
